<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1920</gl:Width>
          <gl:Height>1080</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>false</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Third</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>csv_savepath</Name>
      </Expression>
      <Expression xsi:type="Format" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:GetFullPath" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DrawStimulus</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>numReps</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Count" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>0</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>spatFreq</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SpatialFrequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>tempFreq</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="TemporalFrequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>orientation</Name>
      </Expression>
      <Expression xsi:type="MemberSelector" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:DegreeToRadian" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Angle" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <SpatialFrequency>10</SpatialFrequency>
        <TemporalFrequency>0</TemporalFrequency>
        <Phase>0</Phase>
        <Angle>0</Angle>
        <SquareWave>false</SquareWave>
        <Contrast>1</Contrast>
        <DutyCycle xsi:nil="true" />
        <Radius>1</Radius>
        <Aperture>0</Aperture>
        <Opacity>1</Opacity>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>stimOnTime</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>transform</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:SampleOnRenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\dmartins\Desktop\stimfiles\230327_DMM_DMM000_test\230327_DMM_DMM000_test_07.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>stim_options</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <Count>10</Count>
              <RangeMin>0</RangeMin>
              <RangeMax>1</RangeMax>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>spatFreq</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <Count>10</Count>
              <RangeMin>0</RangeMin>
              <RangeMax>1</RangeMax>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>tempFreq</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="3-orientation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>orientation</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="4-stim_on_time" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>stimOnTime</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="5-reps" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>numReps</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>recording_info</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="2-date" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>230327</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="3-person" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>DMM</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="4-animal" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>DMM000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="5-recording" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>test</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>base_filename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="1-directory" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\dmartins\Desktop\stimfiles</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>base_filename</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>base_filename</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="6-num" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>07</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>savepath_noext</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>savepath_noext</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>avi_savepath</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>savepath_noext</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>csv_savepath</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="11" Label="Source1" />
            <Edge From="2" To="11" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="11" Label="Source3" />
            <Edge From="5" To="11" Label="Source4" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="11" Label="Source5" />
            <Edge From="8" To="11" Label="Source6" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source7" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="23" Label="Source1" />
            <Edge From="16" To="23" Label="Source2" />
            <Edge From="17" To="23" Label="Source3" />
            <Edge From="18" To="23" Label="Source4" />
            <Edge From="19" To="23" Label="Source5" />
            <Edge From="20" To="23" Label="Source6" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source7" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="33" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="32" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="31" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="23" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="23" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source3" />
      <Edge From="23" To="29" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source2" />
      <Edge From="31" To="32" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>